Name MonitorFile
    Parameter infile$, outfile$
    Local in$, cmd_no, cmd$, response_no, response$, sep_position, cmd_len, last_cmd_no
    Print "infile: ", infile$, "outfile: ", outfile$
    
    last_cmd_no = 0

    Repeat
        Sleep 0.5
        Open infile$ for input as #3
        Input #3, in$
        Close #3
        sep_position = InStr (in$, " ")
        cmd_len = Len (in$)
        cmd_no = Val (in$[1:sep_position])
        cmd$ = in$[(sep_position+1):cmd_len]

        If cmd_no > last_cmd_no Then
            last_cmd_no = cmd_no

            ! Acknowledge reading command
            Open outfile$ for output as #4
            Print #4, cmd_no, "ACK"
            Close #4

            If cmd$ = "Exit" Then
                ! do nothing
            Else 
                Evaluate cmd$
            EndIf

            ! Confirm command execution
            Open outfile$ for output as #4
            Print #4, cmd_no, "DONE"
            Close #4
        EndIf
    Until cmd$ = "Exit"
EndMacro

MonitorFile "C:\Users\group\Code\cmd", "C:\Users\group\Code\reply"
